<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="polaris + robot -> data recording"
      Description="polaris + robot -> data recording" />

    <Device
      Id="TrackerDevice"
      Type="PolarisTracker"
      SerialPort="4"
      BaudRate="115200"
      LocalTimeOffsetSec="0"
	  AcquisitionRate="60"
      ToolReferenceFrame="Polaris" >
      <DataSources>
        <DataSource Type="Tool" Id="Probe" RomFile="NdiToolDefinitions/8700339.rom" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="PolarisStream" >
          <DataSource Id="Probe"/>
        </OutputChannel>
      </OutputChannels>
    </Device>
	<Device
		Id="ROBOT"
		Type="OpenIGTLinkTracker"
		LocalTimeOffsetSec="0.0"
		ServerAddress="172.31.1.148"
		ServerPort="50000"
		MessageType="TDATA"
		ToolReferenceFrame="Base"
		IgtlMessageCrcCheckEnabled="true"
		AcquisitionRate="60"
		UseReceivedTimestamps="false"
		SendTimeoutSec="0.2"
		UseLastTransformsOnReceiveTimeout="true"
		ReconnectOnReceiveTimeout="true" 
		ReceiveTimeoutSec ="6.5">
		<DataSources>
			<DataSource Type="Tool" Id="Flange" /> 
		</DataSources>
		<OutputChannels>
			<OutputChannel Id="RobotStream">
				<DataSource Id="Flange" />
		</OutputChannel>
		</OutputChannels>
	</Device>
	
	<Device 
		Id="VideoMixer" 
		Type="VirtualMixer" >
		<InputChannels>
			<InputChannel Id="PolarisStream" />
			<InputChannel Id="RobotStream" />
		</InputChannels>
		<OutputChannels>
			<OutputChannel Id="TrackedStream"/>
		</OutputChannels>
	</Device>    

	<Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="C:\Dev\RobotPolarisCalibration\data_acquisition\1.mha"
      EnableCapturingOnStart="true" >
      <InputChannels>
        <InputChannel Id="TrackedStream" />
      </InputChannels>
    </Device>

  </DataCollection>
  
  
   <PlusOpenIGTLinkServer 
	MaxNumberOfIgtlMessagesToSend="1" 
	MaxTimeSpentWithProcessingMs="40" 
	ListeningPort="18944" 
	SendValidTransformsOnly="true" 
	OutputChannelId="TrackedStream" > 
	<DefaultClientInfo> 
		<MessageTypes> 
			<Message Type="TRANSFORM" />
		</MessageTypes>
		<TransformNames>
			<Transform Name="FlangeToBase" />
			<Transform Name="ProbeToPolaris" />
		</TransformNames>
	</DefaultClientInfo>
  </PlusOpenIGTLinkServer> 
  
  
  
</PlusConfiguration>
